################################
## Modeling truc              ##
## Adrien Paillet, CEA 2021   ##
################################


# Readout at the block level
/gate/digitizer/Singles/insert                          adder
/gate/digitizer/Singles/adder/positionPolicy           energyWeightedCentroid
/gate/digitizer/Singles/insert                          readout
/gate/digitizer/Singles/readout/setPolicy               TakeEnergyCentroid #TakeEnergyWinner  
/gate/digitizer/Singles/readout/setDepth 1


/gate/digitizer/Coincidences/minSectorDifference 1
/gate/digitizer/Coincidences/setWindow 4.57 ns
