/gate/source/addSource                        mySource

/gate/source/mySource/gps/particle gamma
/gate/source/mySource/setType backtoback
/gate/source/mySource/gps/ene/type  Mono
/gate/source/mySource/gps/ene/mono 511. keV
/gate/source/mySource/setActivity                 1000. becquerel

/gate/source/mySource/gps/ang/type     iso
#/gate/source/mySource/gps/ang/mintheta 0. deg #perpendiculaire à z
#/gate/source/mySource/gps/ang/maxtheta 180. deg
#/gate/source/mySource/gps/ang/minphi 0. deg
#/gate/source/mySource/gps/ang/maxphi 360. deg

/gate/source/mySource/gps/pos/centre                  0. 0. 0. mm
